begintemplate celltemplate
	public apcounter,apvec,nmdaGV,ampaGV,gabaGV
	public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend,apic,names
	public Esyn,Enetcon,Isyn,Inetcon,Esourse,numdend,Vvec,spikevec,segdends
	objref Esyn,Enetcon[2],Isyn,Inetcon,Esourse[2],names
	objref apcounter,apvec,nil,Vvec[2],spikevec[2],nmdaGV[2],ampaGV[2],gabaGV[2]
	
proc celldef() {
  topol()
}

create soma, dend[33], apic[19]

proc topol() { local i

  for i = 0, 1 connect dend[i](0), soma(0)
  for i = 2, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  for i = 8, 9 connect dend[i](0), soma(0)
  for i = 10, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[11](1)
  connect dend[14](0), dend[10](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  connect dend[17](0), dend[9](1)
  connect dend[18](0), soma(0)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), soma(0)
  for i = 22, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  connect dend[26](0), dend[22](1)
  connect dend[27](0), dend[21](1)
  connect dend[28](0), soma(0)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  connect apic(0), soma(0)
  for i = 1, 3 connect apic[i](0), apic[i-1](1)
  connect apic[4](0), apic[2](1)
  for i = 5, 6 connect apic[i](0), apic[4](1)
  connect apic[7](0), apic[1](1)
  connect apic[8](0), apic(1)
  for i = 9, 11 connect apic[i](0), apic[i-1](1)
  connect apic[12](0), apic[10](1)
  connect apic[13](0), apic[9](1)
  connect apic[14](0), apic[8](1)
  for i = 15, 16 connect apic[i](0), apic[i-1](1)
  connect apic[17](0), apic[15](1)
  connect apic[18](0), apic[14](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(15.654, -70.772, -425.293, 9.832)
	pt3dadd(11.29, -83.46, -424.19, 5.34)
  }
  dend {pt3dclear()
	pt3dadd(15.654, -70.772, -425.293, 1.97)
	pt3dadd(15.03, -79.94, -412.99, 1.97)
	pt3dadd(14.86, -82.76, -412.99, 1.97)
	pt3dadd(14.86, -83.13, -412.99, 1.97)
	pt3dadd(14.98, -83.25, -412.99, 1.97)
	pt3dadd(17.29, -84.77, -412.99, 1.97)
	pt3dadd(17.66, -84.9, -412.99, 1.97)
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  }
}
proc shape3d_2() {
  dend[4] {	pt3dadd(156.96, -168.76, -426.24, 0.74)
	pt3dadd(157.08, -169.01, -426.24, 0.74)
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  }
}
proc shape3d_3() {
  dend[7] {	pt3dadd(9.94, -226.69, -433.54, 0.37)
	pt3dadd(10.53, -228.05, -433.54, 0.37)
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  }
}
proc shape3d_4() {
  dend[13] {	pt3dadd(-22.53, -175.43, -435.44, 0.86)
	pt3dadd(-23.94, -178.97, -435.49, 0.86)
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  }
}
proc shape3d_5() {
  apic {	pt3dadd(25.16, -50.94, -427.24, 1.72)
	pt3dadd(26.65, -50.23, -427.24, 1.72)
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  }
}
proc shape3d_6() {
  apic[7] {	pt3dadd(-9.28, -74.67, -453.79, 0.86)
	pt3dadd(-11.96, -80.28, -456.39, 0.86)
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  }
}
proc shape3d_7() {
  apic[9] {	pt3dadd(-4.07, 214.27, -478.84, 0.62)
	pt3dadd(-3.7, 214.14, -478.84, 0.62)
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  }
}
proc shape3d_8() {
  apic[14] {	pt3dadd(36.5, 90.34, -462.54, 0.86)
	pt3dadd(37.63, 91.91, -462.54, 0.86)
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  }
}
proc shape3d_9() {
  apic[16] {	pt3dadd(55.83, 353.22, -519.74, 0.62)
	pt3dadd(54.42, 356.69, -519.99, 0.62)
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  }
}
proc shape3d_10() {
  dend[19] {	pt3dadd(-15.9, -51.73, -410.44, 1.72)
	pt3dadd(-16.03, -51.73, -410.44, 1.72)
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  }
}
proc shape3d_11() {
  dend[24] {	pt3dadd(-98.76, -244.15, -428.84, 1.11)
	pt3dadd(-99.05, -246.97, -428.74, 0.86)
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  }
}
proc shape3d_12() {
  dend[27] {	pt3dadd(-34.75, -84.76, -415.44, 1.11)
	pt3dadd(-35.85, -84.62, -415.04, 1.11)
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  }
}
proc shape3d_13() {
  dend[31] {	pt3dadd(124.7, -49.28, -446.49, 0.62)
	pt3dadd(125.07, -48.91, -446.49, 0.62)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil
	objref all,dends,segdends,Esyn,Esourse[2]
proc init(){
		objref all,dends,segdends,Esyn,Esourse[2]
		all=new SectionList()
		dends = new SectionList()
		segdends = new SectionList()
		Esyn=new List()
		Enetcon=new List()
		Esourse[0]=new Vector()
		Esourse[1]=new Vector()
		Isyn=new List()
		Inetcon=new List()
		topol()
		basic_shape()
		access soma
		distance()
		forall{

			//dends.append()
			all.append()
			for i=0,n3d()-1{
				pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
			}
			if (diam<3){diam=1}
			nseg=9

			insert pas
			e_pas=-60
			g_pas=1/10000
			cm=1
			Ra=100

		}
		//soma dends.remove()	
		//soma dends.append()		
		//for i=0,32{dend[i] dends.append()}
		for i=0,18{apic[i] dends.append()}
		objref apcounter,apvec,nil
		numdend=0
		forsec dends{numdend=numdend+1 }//segdends.append()}
		apvec=new Vector()
		access soma
		apcounter=new NetCon(&v(.5), nil)
		apcounter.threshold = -20 
		apcounter.record(apvec)
		//saving voltage vectors
		objref Vvec[numdend+1],spikevec[numdend+1],nmdaGV[2],ampaGV[2],gabaGV[2]
		i=0
		forsec dends {
			Vvec[i]=new Vector()
			Vvec[i].record(&v(0.9))
			spikevec[i]=new Vector()
			i=i+1
		}
		Vvec[numdend]=new Vector()
		Vvec[numdend].record(&soma.v(0.5))

}

endtemplate celltemplate
