begintemplate celltemplate
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend
	public Esyn,Enetcon,Isyn,Inetcon,Esourse,numdend,Vvec,spikevec,segdends
	objref Esyn,Enetcon[2],Isyn,Inetcon,Esourse[2]
	objref apcounter,apvec,nil,Vvec[2],spikevec[2]
proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[49]

proc topol() { local i
  connect dend(0), soma(1)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  connect dend[6](0), dend(1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), soma(0)
  for i = 10, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  connect dend[16](0), dend[10](1)
  connect dend[17](0), dend[9](1)
  connect dend[18](0), soma(0)
  for i = 19, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  connect dend[22](0), dend[18](1)
  connect dend[23](0), soma(0)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  connect dend[27](0), dend[23](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect dend[32](0), soma(0)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  for i = 35, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[35](1)
  connect dend[42](0), dend[34](1)
  for i = 43, 44 connect dend[i](0), dend[i-1](1)
  connect dend[45](0), dend[43](1)
  connect dend[46](0), dend[42](1)
  for i = 47, 48 connect dend[i](0), dend[46](1)
 
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-10.635, -6.82071, 2.8, 17.1033)
	pt3dadd(-15.74, -15.13, 2.4, 1.87)
  }
  dend {pt3dclear()
	pt3dadd(-15.74, -15.13, 2.4, 1.87)
	pt3dadd(-16.19, -18.52, 2.4, 1.87)
	pt3dadd(-14.84, -19.31, 2.4, 1.87)
	pt3dadd(-15.03, -21.36, 2.4, 1.87)
	pt3dadd(-16.35, -23.79, 2.4, 1.87)
	pt3dadd(-16.44, -25.62, 2.8, 1.87)
	pt3dadd(-17.88, -26.65, 3.2, 1.87)
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  }
}
proc shape3d_2() {
  dend[9] {	pt3dadd(19.22, -5.43, 0, 2.21)
	pt3dadd(23.19, -4.96, 0, 2.21)
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  }
}
proc shape3d_3() {
  dend[20] {	pt3dadd(78.09, 15.74, -16, 1.36)
	pt3dadd(79.5, 15.33, -16.8, 1.36)
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  }
}
proc shape3d_4() {
  dend[29] {	pt3dadd(-57.1, -37.28, 3.6, 1.19)
	pt3dadd(-60.47, -39.52, 3.6, 1.19)
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  }
}
proc shape3d_5() {
  dend[41] {	pt3dadd(-78.33, -108.58, -16.8, 1.53)
	pt3dadd(-77.94, -110.24, -17.2, 1.19)
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  }

}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()

}

objref all, somatic, basal
proc subsets() { local i
  objref all, somatic, basal
  all = new SectionList()
    soma all.append()
    for i=0, 48 dend[i] all.append()


  somatic = new SectionList()
    soma somatic.append()



  basal = new SectionList()
    for i=0, 48 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
}
//access soma
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil
	objref all,dends,segdends,Esyn,Esourse[2]
proc init(){
		objref all,dends,segdends,Esyn,Esourse[2]
		all=new SectionList()
		dends = new SectionList()
		segdends = new SectionList()
		Esyn=new List()
		Enetcon=new List()
		Esourse[0]=new Vector()
		Esourse[1]=new Vector()
		Isyn=new List()
		Inetcon=new List()
		topol()
basic_shape()
		access soma

		distance()

		forall{

			dends.append()
			segdends.append()
			all.append()
			for i=0,n3d()-1{
				pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
			}
			
			nseg=9
			if (diam<3){diam=1}
			insert pas
			e_pas=-60
			g_pas=1/10000
			cm=1
			Ra=100

		}
		soma dends.remove()	
		soma segdends.remove()		

		objref apcounter,apvec,nil
		numdend=0
		forsec dends{numdend=numdend+1}
		apvec=new Vector()
		access soma
		apcounter=new NetCon(&v(.5), nil)
		apcounter.threshold = -20 
		apcounter.record(apvec)
		//saving voltage vectors
		objref Vvec[numdend+1],spikevec[numdend+1]
		i=0
		forsec dends {
			Vvec[i]=new Vector()
			Vvec[i].record(&v(0.9))
			spikevec[i]=new Vector()
			i=i+1
		}
		Vvec[numdend]=new Vector()
		Vvec[numdend].record(&soma.v(0.5))

}

endtemplate celltemplate
