begintemplate celltemplate
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend,apic
	public Esyn,Enetcon,Isyn,Inetcon,Esourse,numdend,Vvec,spikevec,segdends
	objref Esyn,Enetcon[2],Isyn,Inetcon,Esourse[2]
	objref apcounter,apvec,nil,Vvec[2],spikevec[2]
	objref all,dends,segdends,Esyn

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[70], apic[116]

proc topol() { local i

  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend(1)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect dend[16](0), dend[12](1)
  connect dend[17](0), soma(0.5)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  connect dend[20](0), soma(0.5)
  for i = 21, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  connect dend[28](0), dend[20](1)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  connect dend[31](0), soma(0.5)
  for i = 32, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  connect dend[40](0), dend[34](1)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  connect dend[43](0), dend[33](1)
  connect dend[44](0), dend[32](1)
  for i = 45, 46 connect dend[i](0), dend[i-1](1)
  connect dend[47](0), dend[45](1)
  connect dend[48](0), dend[44](1)
  connect dend[49](0), dend[32](1)
  for i = 50, 52 connect dend[i](0), dend[i-1](1)
  connect dend[53](0), dend[51](1)
  connect dend[54](0), dend[50](1)
  connect dend[55](0), dend[49](1)
  connect dend[56](0), dend[31](1)
  connect dend[57](0), soma(0.5)
  for i = 58, 60 connect dend[i](0), dend[i-1](1)
  connect dend[61](0), dend[59](1)
  connect dend[62](0), dend[58](1)
  connect dend[63](0), dend[57](1)
  connect dend[64](0), soma(0.5)
  for i = 65, 66 connect dend[i](0), dend[64](1)
  connect dend[67](0), soma(0.5)
  for i = 68, 69 connect dend[i](0), dend[67](1)
  connect apic(0), soma(0.5)
  for i = 1, 17 connect apic[i](0), apic[i-1](1)
  connect apic[18](0), apic[16](1)
  connect apic[19](0), apic[15](1)
  for i = 20, 21 connect apic[i](0), apic[i-1](1)
  connect apic[22](0), apic[20](1)
  for i = 23, 24 connect apic[i](0), apic[22](1)
  connect apic[25](0), apic[19](1)
  connect apic[26](0), apic[14](1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  connect apic[29](0), apic[13](1)
  for i = 30, 31 connect apic[i](0), apic[29](1)
  connect apic[32](0), apic[12](1)
  for i = 33, 34 connect apic[i](0), apic[i-1](1)
  connect apic[35](0), apic[33](1)
  connect apic[36](0), apic[32](1)
  for i = 37, 38 connect apic[i](0), apic[36](1)
  connect apic[39](0), apic[11](1)
  for i = 40, 44 connect apic[i](0), apic[i-1](1)
  connect apic[45](0), apic[43](1)
  connect apic[46](0), apic[42](1)
  connect apic[47](0), apic[10](1)
  for i = 48, 52 connect apic[i](0), apic[i-1](1)
  connect apic[53](0), apic[51](1)
  connect apic[54](0), apic[50](1)
  connect apic[55](0), apic[49](1)
  for i = 56, 57 connect apic[i](0), apic[55](1)
  connect apic[58](0), apic[48](1)
  for i = 59, 61 connect apic[i](0), apic[i-1](1)
  connect apic[62](0), apic[60](1)
  connect apic[63](0), apic[59](1)
  for i = 64, 65 connect apic[i](0), apic[i-1](1)
  connect apic[66](0), apic[64](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  connect apic[69](0), apic[63](1)
  connect apic[70](0), apic[58](1)
  for i = 71, 72 connect apic[i](0), apic[i-1](1)
  connect apic[73](0), apic[71](1)
  connect apic[74](0), apic[70](1)
  connect apic[75](0), apic[47](1)
  connect apic[76](0), apic[9](1)
  connect apic[77](0), apic[8](1)
  for i = 78, 79 connect apic[i](0), apic[77](1)
  for i = 80, 81 connect apic[i](0), apic[79](1)
  connect apic[82](0), apic[7](1)
  for i = 83, 84 connect apic[i](0), apic[i-1](1)
  connect apic[85](0), apic[83](1)
  for i = 86, 87 connect apic[i](0), apic[85](1)
  connect apic[88](0), apic[82](1)
  connect apic[89](0), apic[6](1)
  connect apic[90](0), apic[5](1)
  for i = 91, 93 connect apic[i](0), apic[i-1](1)
  connect apic[94](0), apic[92](1)
  for i = 95, 96 connect apic[i](0), apic[91](1)
  connect apic[97](0), apic[90](1)
  connect apic[98](0), apic[4](1)
  for i = 99, 101 connect apic[i](0), apic[i-1](1)
  connect apic[102](0), apic[100](1)
  for i = 103, 104 connect apic[i](0), apic[102](1)
  connect apic[105](0), apic[99](1)
  for i = 106, 107 connect apic[i](0), apic[105](1)
  connect apic[108](0), apic[98](1)
  connect apic[109](0), apic[3](1)
  for i = 110, 111 connect apic[i](0), apic[109](1)
  for i = 112, 113 connect apic[i](0), apic[111](1)
  connect apic[114](0), apic[2](1)
  connect apic[115](0), apic[114](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(5.2086, -0.585965, 0.408518, 8.3235)
	pt3dadd(4.95805, -2.05509, 0.36858, 10.2405)
	pt3dadd(4.70749, -3.52421, 0.328643, 11.5482)
	pt3dadd(4.45693, -4.99334, 0.288705, 12.3947)
	pt3dadd(4.20638, -6.46246, 0.248768, 14.018)
	pt3dadd(3.95582, -7.93159, 0.20883, 16.2498)
	pt3dadd(3.70527, -9.40071, 0.168893, 17.6724)
	pt3dadd(3.45471, -10.8698, 0.128955, 18.8965)
	pt3dadd(3.20415, -12.339, 0.0890177, 20.0475)
	pt3dadd(2.9536, -13.8081, 0.0490801, 20.7176)
	pt3dadd(2.70304, -15.2772, 0.00914259, 21.1493)
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  }
}
proc shape3d_2() {

  dend {pt3dclear()
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  }
}
proc shape3d_3() {
  dend[6] {	pt3dadd(-61.52, -9.2, 2.6, 1.03)
	pt3dadd(-61.97, -9.65, 2.55, 1.03)
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  }
}
proc shape3d_4() {
  dend[8] {	pt3dadd(-89.24, -7.49, 13.3, 0.89)
	pt3dadd(-89.61, -7.04, 13.3, 0.89)
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  }
}
proc shape3d_5() {
  dend[11] {	pt3dadd(-90.01, -64.54, -4.3, 0.59)
	pt3dadd(-90.68, -65.06, -4.3, 0.59)
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  }
}
proc shape3d_6() {
  dend[14] {	pt3dadd(-85, 62.08, -8.1, 0.81)
	pt3dadd(-85.74, 61.93, -8.1, 0.81)
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  }
}
proc shape3d_7() {
  dend[17] {	pt3dadd(-24.56, -32.75, -6.1, 1.7)
	pt3dadd(-25.53, -33.12, -6.1, 1.7)
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  }
}
proc shape3d_8() {
  dend[19] {	pt3dadd(-40.89, -42.96, -15.35, 0.89)
	pt3dadd(-41.41, -42.3, -15.35, 0.89)
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  }
}
proc shape3d_9() {
  dend[23] {	pt3dadd(-18.28, -104.23, 3.15, 0.96)
	pt3dadd(-18.8, -105.19, 3.15, 0.96)
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  }
}
proc shape3d_10() {
  dend[25] {	pt3dadd(-9.03, -93.39, 6.15, 1.11)
	pt3dadd(-9.33, -94.35, 6.2, 1.11)
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  }
}
proc shape3d_11() {
  dend[28] {	pt3dadd(-9.65, -33.06, 11, 1.4)
	pt3dadd(-10.16, -33.43, 11, 1.4)
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  }
}
proc shape3d_12() {
  dend[36] {	pt3dadd(49.49, 15.07, -0.1, 0.89)
	pt3dadd(49.86, 15.88, -0.1, 0.89)
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  }
}
proc shape3d_13() {
  dend[39] {	pt3dadd(53.4, 31.88, -2.15, 0.89)
	pt3dadd(53.4, 32.47, -2.05, 0.89)
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  }
}
proc shape3d_14() {
  dend[42] {	pt3dadd(83.72, -12.36, -15.75, 0.96)
	pt3dadd(84.31, -11.4, -16.25, 0.96)
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  }
}
proc shape3d_15() {
  dend[48] {	pt3dadd(22.45, -41.12, 10.9, 0.81)
	pt3dadd(22.52, -42, 11, 0.81)
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  }
}
proc shape3d_16() {
  dend[53] {	pt3dadd(32.7, -78.87, -12, 0.81)
	pt3dadd(32.56, -79.98, -12.8, 0.81)
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  }
}
proc shape3d_17() {
  dend[54] {	pt3dadd(66.54, -171.95, -12.8, 0.67)
	pt3dadd(66.69, -173.57, -12.85, 0.67)
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  }
}
proc shape3d_18() {
  dend[58] {	pt3dadd(-4.33, 7.26, 12.8, 1.48)
  }
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  }
}
proc shape3d_19() {
  dend[65] {	pt3dadd(13.63, 14.56, 15.05, 0.74)
  }
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  }
}
proc shape3d_20() {
  apic[8] {	pt3dadd(44.75, 198.7, 2.9, 5.1)
	pt3dadd(45.27, 200.77, 2.9, 5.1)
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  }
}
proc shape3d_21() {
  apic[12] {	pt3dadd(62.58, 460.34, -2, 2.14)
	pt3dadd(63.1, 461.3, -2.4, 2.29)
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  }
}
proc shape3d_22() {
  apic[12] {	pt3dadd(75.17, 679.47, -1.45, 2.22)
	pt3dadd(75.25, 680.51, -2.05, 2.22)
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  }
}
proc shape3d_23() {
  apic[16] {	pt3dadd(162.61, 797.52, -21.65, 0.96)
	pt3dadd(163.72, 798.33, -21.65, 0.96)
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  }
}
proc shape3d_24() {
  apic[17] {	pt3dadd(273.73, 890.94, -18.2, 0.67)
	pt3dadd(274.09, 891.53, -18.05, 0.67)
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  }
}
proc shape3d_25() {
  apic[20] {	pt3dadd(144.56, 791.45, -9.4, 0.74)
	pt3dadd(143.82, 792.04, -9.4, 0.74)
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  }
}
proc shape3d_26() {
  apic[22] {	pt3dadd(133.33, 867.5, -9.2, 0.52)
	pt3dadd(133.7, 868.54, -9.25, 0.52)
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  }
}
proc shape3d_27() {
  apic[25] {	pt3dadd(169.4, 795.01, -3.8, 0.67)
	pt3dadd(170.06, 795.97, -4.05, 0.67)
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  }
}
proc shape3d_28() {
  apic[26] {	pt3dadd(119.53, 772.09, -1.1, 0.89)
	pt3dadd(120.27, 771.65, -1, 0.89)
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  }
}
proc shape3d_29() {
  apic[27] {	pt3dadd(199.37, 866.13, 9.8, 0.52)
	pt3dadd(200.04, 866.49, 9.7, 0.52)
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  }
}
proc shape3d_30() {
  apic[29] {	pt3dadd(65.22, 806.1, -5.3, 0.96)
	pt3dadd(64.56, 806.61, -5.3, 0.96)
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  }
}
proc shape3d_31() {
  apic[31] {	pt3dadd(54.67, 860.06, -5.5, 0.67)
	pt3dadd(54.45, 860.87, -5.5, 0.67)
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  }
}
proc shape3d_32() {
  apic[32] {	pt3dadd(69.49, 778.56, -15.85, 0.89)
	pt3dadd(69.12, 779.23, -16.2, 0.89)
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  }
}
proc shape3d_33() {
  apic[35] {	pt3dadd(84.83, 906.99, -8.9, 0.59)
	pt3dadd(85.64, 907.13, -8.85, 0.59)
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  }
}
proc shape3d_34() {
  apic[36] {	pt3dadd(32.77, 919.41, -40.85, 0.81)
	pt3dadd(33.66, 919.63, -41.4, 0.81)
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  }
}
proc shape3d_35() {
  apic[39] {	pt3dadd(43.7, 543.62, -2.35, 2.44)
	pt3dadd(44.29, 544.73, -2.35, 2.29)
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  }
}
proc shape3d_36() {
  apic[40] {	pt3dadd(19.53, 740.04, -14.55, 1.55)
	pt3dadd(19.3, 741.07, -14.55, 1.55)
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  }
}
proc shape3d_37() {
  apic[45] {	pt3dadd(0.11, 829.3, -13.25, 0.74)
	pt3dadd(-0.03, 830.03, -13.2, 0.74)
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  }
}
proc shape3d_38() {
  apic[46] {	pt3dadd(3.88, 814.33, -25.1, 0.44)
	pt3dadd(4.18, 815.14, -25.55, 0.44)
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  }
}
proc shape3d_39() {
  apic[47] {	pt3dadd(43.88, 441.43, -5.3, 3.18)
	pt3dadd(43.51, 441.72, -5.25, 3.18)
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  }
}
proc shape3d_40() {
  apic[48] {	pt3dadd(31.16, 660.18, -24.6, 2.88)
	pt3dadd(31.01, 661.07, -24.75, 2.88)
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  }
}
proc shape3d_41() {
  apic[50] {	pt3dadd(110.05, 835.29, -46.25, 0.81)
	pt3dadd(110.97, 836.25, -45.85, 0.81)
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  }
}
proc shape3d_42() {
  apic[53] {	pt3dadd(205.65, 920.33, -41.85, 0.44)
	pt3dadd(206.24, 920.41, -41.25, 0.44)
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  }
}
proc shape3d_43() {
  apic[56] {	pt3dadd(117.75, 908.83, -72.05, 0.81)
	pt3dadd(118.26, 909.79, -72.95, 0.81)
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  }
}
proc shape3d_44() {
  apic[57] {	pt3dadd(184.64, 923.67, -60.1, 0.37)
	pt3dadd(185.08, 923.89, -58.35, 0.37)
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  }
}
proc shape3d_45() {
  apic[60] {	pt3dadd(8.09, 883.43, -32.55, 0.89)
	pt3dadd(7.94, 884.02, -32.55, 0.89)
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  }
}
proc shape3d_46() {
  apic[63] {	pt3dadd(5.8, 849.32, -40.3, 1.03)
	pt3dadd(5.58, 849.91, -40.35, 1.03)
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  }
}
proc shape3d_47() {
  apic[65] {	pt3dadd(-73.2, 919.64, -38.5, 0.59)
	pt3dadd(-74.01, 919.12, -38.85, 0.59)
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  }
}
proc shape3d_48() {
  apic[69] {	pt3dadd(-52.57, 909.74, -24, 0.59)
	pt3dadd(-52.79, 909.81, -23.8, 0.59)
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  }
}
proc shape3d_49() {
  apic[71] {	pt3dadd(-32.05, 850.13, -66.15, 0.89)
	pt3dadd(-32.72, 850.27, -66.2, 0.89)
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  }
}
proc shape3d_50() {
  apic[74] {	pt3dadd(21.62, 779.6, -44.4, 0.59)
	pt3dadd(21.62, 780.48, -44.45, 0.59)
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  }
}
proc shape3d_51() {
  apic[74] {	pt3dadd(146.9, 850.87, -75.3, 0.81)
	pt3dadd(146.68, 849.62, -75.3, 0.81)
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  }
}
proc shape3d_52() {
  apic[76] {	pt3dadd(50.37, 369.87, 1.25, 1.03)
	pt3dadd(50.66, 370.02, 1.45, 1.03)
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  }
}
proc shape3d_53() {
  apic[82] {	pt3dadd(51.62, 164.21, 3.9, 2.59)
	pt3dadd(52.73, 163.03, 4, 2.59)
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  }
}
proc shape3d_54() {
  apic[86] {	pt3dadd(45.44, 213.02, -6.5, 0.81)
	pt3dadd(45, 213.24, -6.55, 0.81)
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  }
}
proc shape3d_55() {
  apic[87] {	pt3dadd(58.78, 187.66, -25.4, 0.74)
	pt3dadd(59.23, 188.11, -25.55, 0.74)
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  }
}
proc shape3d_56() {
  apic[89] {	pt3dadd(104.31, 163.08, 1.1, 1.03)
	pt3dadd(105.05, 163.45, 1.1, 1.03)
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  }
}
proc shape3d_57() {
  apic[93] {	pt3dadd(-12.21, 145.18, 3.15, 0.81)
	pt3dadd(-12.5, 145.77, 3.25, 0.81)
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  }
}
proc shape3d_58() {
  apic[94] {	pt3dadd(-34.38, 153.05, 1.3, 1.11)
	pt3dadd(-35.05, 153.12, 1.3, 1.11)
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  }
}
proc shape3d_59() {
  apic[95] {	pt3dadd(-44.36, 188.99, -3.2, 0.89)
	pt3dadd(-44.58, 189.5, -3.25, 0.89)
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  }
}
proc shape3d_60() {
  apic[97] {	pt3dadd(8.71, 106, 3.75, 0.96)
	pt3dadd(8.27, 106.07, 3.7, 0.81)
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  }
}
proc shape3d_61() {
  apic[101] {	pt3dadd(83.5, 155.39, 6.85, 0.74)
	pt3dadd(83.5, 156.13, 6.95, 0.74)
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  }
}
proc shape3d_62() {
  apic[104] {	pt3dadd(67.63, 107.68, -5.7, 0.67)
	pt3dadd(67.86, 108.49, -5.75, 0.67)
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  }
}
proc shape3d_63() {
  apic[107] {	pt3dadd(69.14, 94.14, -3.05, 0.52)
	pt3dadd(69.36, 94.81, -3.05, 0.52)
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  }
}
proc shape3d_64() {
  apic[109] {	pt3dadd(9.22, 64.73, 2.65, 1.55)
  }
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  }
}
proc shape3d_65() {
  apic[112] {	pt3dadd(-64.59, 120.46, 0.6, 0.67)
	pt3dadd(-64.81, 120.75, 0.35, 0.67)
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  }
}
proc shape3d_66() {
  apic[113] {	pt3dadd(-104.74, 17.98, -1.1, 0.67)
	pt3dadd(-105.25, 18.05, -1.1, 0.67)
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  }
}
proc shape3d_67() {
  apic[115] {	pt3dadd(-18.29, 152.94, -22.4, 1.03)
	pt3dadd(-18.22, 153.75, -22.45, 1.03)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
}

//objref all, somatic, axonal, basal, apical
proc subsets() { }
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil

proc init(){
		objref all,dends,segdends,Esyn,Esourse[2]
		all=new SectionList()
		dends = new SectionList()
		segdends = new SectionList()
		Esyn=new List()
		Enetcon=new List()
		Esourse[0]=new Vector()
		Esourse[1]=new Vector()
		Isyn=new List()
		Inetcon=new List()
		topol()
basic_shape()
		access soma
		//dends.append()
		distance()
		//numdend=-1
		forall{
			//dends.append()
			all.append()
			for i=0,n3d()-1{
				pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
			}
			if (diam<=2){diam=1}
			nseg=9

			insert pas
			e_pas=-60
			g_pas=1/10000
			cm=1
			Ra=100

		}
		//soma dends.remove()		
		//for i=0,69{dend[i] dends.append()}
		for i=0,115{
			access apic[i]
			if (distance(1)>500){ dends.append()}
		}

		
		objref apcounter,apvec,nil
		numdend=0
		forsec dends{numdend=numdend+1 segdends.append()}
		apvec=new Vector()
		access soma
		apcounter=new NetCon(&v(.5), nil)
		apcounter.threshold = -20 
		apcounter.record(apvec)
		//saving voltage vectors
		objref Vvec[numdend+1],spikevec[numdend+1]
		i=0
		forsec dends {
			Vvec[i]=new Vector()
			Vvec[i].record(&v(0.9))
			spikevec[i]=new Vector()
			i=i+1
		}
		Vvec[numdend]=new Vector()
		Vvec[numdend].record(&soma.v(0.5))
		//Vvec[numdend].record(&apic[10].v(0.5))
		//dends=new SectionList()
}

endtemplate celltemplate
