begintemplate celltemplate
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend
	public Esyn,Enetcon,Isyn,Inetcon,Esourse,numdend,Vvec,spikevec,segdends
	objref Esyn,Enetcon[2],Isyn,Inetcon,Esourse[2]
	objref apcounter,apvec,nil,Vvec[2],spikevec[2]
	
proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[75], apic[70]

proc topol() { local i

  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  for i = 6, 7 connect dend[i](0), dend[2](1)
  connect dend[8](0), soma(0.5)
  for i = 9, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[11](1)
  connect dend[14](0), dend[10](1)
  connect dend[15](0), dend[9](1)
  for i = 16, 17 connect dend[i](0), dend[i-1](1)
  connect dend[18](0), dend[16](1)
  connect dend[19](0), dend[15](1)
  connect dend[20](0), dend[8](1)
  for i = 21, 22 connect dend[i](0), dend[i-1](1)
  connect dend[23](0), dend[21](1)
  connect dend[24](0), dend[20](1)
  connect dend[25](0), soma(0.5)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect dend[32](0), soma(0.5)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  connect dend[35](0), soma(0.5)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[35](1)
  for i = 40, 42 connect dend[i](0), dend[i-1](1)
  connect dend[43](0), dend[41](1)
  connect dend[44](0), dend[40](1)
  connect dend[45](0), dend[39](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  connect dend[48](0), soma(0.5)
  for i = 49, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  for i = 53, 54 connect dend[i](0), dend[52](1)
  connect dend[55](0), dend[49](1)
  connect dend[56](0), dend[48](1)
  for i = 57, 59 connect dend[i](0), soma(0.5)
  for i = 60, 61 connect dend[i](0), dend[59](1)
  for i = 62, 63 connect dend[i](0), soma(0.5)
  for i = 64, 65 connect dend[i](0), dend[i-1](1)
  connect dend[66](0), dend[64](1)
  connect dend[67](0), dend[63](1)
  for i = 68, 69 connect dend[i](0), soma(0.5)
  for i = 70, 71 connect dend[i](0), dend[69](1)
  connect dend[72](0), soma(0.5)
  for i = 73, 74 connect dend[i](0), dend[72](1)
  connect apic(0), soma(0.5)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[2](1)
  connect apic[6](0), apic[1](1)
  connect apic[7](0), apic(1)
  for i = 8, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  connect apic[11](0), apic[7](1)
  for i = 12, 13 connect apic[i](0), apic[11](1)
  connect apic[14](0), apic[3](1)
  for i = 15, 29 connect apic[i](0), apic[i-1](1)
  connect apic[30](0), apic[28](1)
  connect apic[31](0), apic[27](1)
  connect apic[32](0), apic[26](1)
  for i = 33, 34 connect apic[i](0), apic[25](1)
  connect apic[35](0), apic[24](1)
  for i = 36, 39 connect apic[i](0), apic[i-1](1)
  connect apic[40](0), apic[38](1)
  connect apic[41](0), apic[37](1)
  connect apic[42](0), apic[36](1)
  connect apic[43](0), apic[35](1)
  connect apic[44](0), apic[23](1)
  connect apic[45](0), apic[22](1)
  connect apic[46](0), apic[21](1)
  connect apic[47](0), apic[20](1)
  connect apic[48](0), apic[19](1)
  for i = 49, 50 connect apic[i](0), apic[48](1)
  connect apic[51](0), apic[18](1)
  for i = 52, 53 connect apic[i](0), apic[51](1)
  connect apic[54](0), apic[17](1)
  connect apic[55](0), apic[16](1)
  for i = 56, 57 connect apic[i](0), apic[55](1)
  connect apic[58](0), apic[15](1)
  connect apic[59](0), apic[14](1)
  for i = 60, 62 connect apic[i](0), apic[i-1](1)
  connect apic[63](0), apic[61](1)
  for i = 64, 65 connect apic[i](0), apic[63](1)
  connect apic[66](0), apic[60](1)
  connect apic[67](0), apic[59](1)
  for i = 68, 69 connect apic[i](0), apic[67](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-9.08491, -25.0431, 2.66197, 4.00787)
	pt3dadd(-7.84252, -24.1868, 2.4198, 7.10668)
	pt3dadd(-6.60013, -23.3305, 2.17764, 16.1684)
	pt3dadd(-5.35774, -22.4742, 1.93548, 18.5698)
	pt3dadd(-4.11535, -21.6179, 1.69332, 19.6396)
	pt3dadd(-2.87295, -20.7616, 1.45116, 20.4578)
	pt3dadd(-1.63056, -19.9053, 1.209, 20.933)
	pt3dadd(-0.388173, -19.049, 0.966836, 22.1711)
	pt3dadd(0.854218, -18.1927, 0.724674, 23.8827)
	pt3dadd(2.09661, -17.3364, 0.482513, 24.5129)
	pt3dadd(3.339, -16.4801, 0.240351, 24.8211)
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  }
}
proc shape3d_2() {
  dend[4] {	pt3dadd(-92.47, 7.19, -20.65, 1.33)
	pt3dadd(-93.58, 8.01, -20.75, 1.33)
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  }
}
proc shape3d_3() {
  dend[12] {	pt3dadd(-42.63, -75.3, -14.2, 0.89)
	pt3dadd(-43.73, -75.52, -14.2, 0.89)
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  }
}
proc shape3d_4() {
  dend[14] {	pt3dadd(-9.16, -149.18, -32.25, 1.18)
	pt3dadd(-8.64, -150.65, -35.2, 1.11)
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  }
}
proc shape3d_5() {
  dend[19] {	pt3dadd(-56.76, -25.07, -30.6, 1.11)
	pt3dadd(-56.61, -24.48, -30.6, 1.11)
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  }
}
proc shape3d_6() {
  dend[24] {	pt3dadd(-35.36, -4.25, -15.7, 1.26)
	pt3dadd(-35.73, -3.81, -16.15, 1.26)
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  }
}
proc shape3d_7() {
  dend[29] {	pt3dadd(-64.72, -53.87, 11.9, 1.26)
	pt3dadd(-65.68, -53.79, 11.9, 1.26)
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  }
}
proc shape3d_8() {
  dend[34] {	pt3dadd(38.35, -17.4, 2.4, 1.7)
	pt3dadd(39.6, -17.03, 2.35, 1.7)
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  }
}
proc shape3d_9() {
  dend[37] {	pt3dadd(106.05, -34.04, -42.25, 1.33)
	pt3dadd(106.93, -34.48, -42.3, 1.33)
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  }
}
proc shape3d_10() {
  dend[41] {	pt3dadd(53.19, -66.59, -26.35, 1.7)
	pt3dadd(52.97, -67.69, -24.8, 1.7)
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  }
}
proc shape3d_11() {
  dend[44] {	pt3dadd(73.09, -85.52, -31.8, 1.11)
	pt3dadd(73.09, -86.77, -31.8, 1.11)
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  }
}
proc shape3d_12() {
  dend[50] {	pt3dadd(55.64, -74.36, -43.6, 0.81)
	pt3dadd(56.01, -75.09, -43.6, 0.81)
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  }
}
proc shape3d_13() {
  dend[56] {	pt3dadd(131.92, -105.78, -28.9, 1.4)
	pt3dadd(133.17, -106.23, -28.9, 1.4)
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  }
}
proc shape3d_14() {
  dend[61] {	pt3dadd(-5.09, -66.55, 23.2, 1.11)
	pt3dadd(-5.68, -67.58, 23.25, 1.11)
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  }
}
proc shape3d_15() {
  dend[65] {	pt3dadd(53.91, 120.74, -48.3, 0.96)
	pt3dadd(54.43, 121.48, -48.4, 0.96)
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  }
}
proc shape3d_16() {
  dend[67] {	pt3dadd(52.09, 54.51, -38.8, 1.18)
	pt3dadd(52.46, 55.4, -39, 1.18)
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  }
}
proc shape3d_17() {
  dend[68] {	pt3dadd(-66.86, -15.41, -65.7, 1.26)
	pt3dadd(-67.6, -15.41, -66.75, 1.26)
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  }
}
proc shape3d_18() {
  dend[70] {	pt3dadd(-75.81, -124.15, -15.95, 0.96)
	pt3dadd(-76.99, -124.37, -15.95, 0.96)
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  }
}
proc shape3d_19() {
  dend[72] {	pt3dadd(3.03, -42.81, -29, 1.7)
	pt3dadd(3.1, -43.99, -29, 1.7)
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  }
}
proc shape3d_20() {
  dend[74] {	pt3dadd(-45.17, -104.95, -74.25, 0.89)
	pt3dadd(-45.61, -105.76, -74.35, 0.89)
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  }
}
proc shape3d_21() {
  apic[9] {	pt3dadd(54.09, 29.32, 8.15, 1.48)
	pt3dadd(54.39, 28.37, 8.15, 1.18)
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  }
}
proc shape3d_22() {
  apic[14] {	pt3dadd(-15.15, 67.28, -0.35, 5.17)
	pt3dadd(-15, 69.64, -0.25, 5.17)
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  }
}
proc shape3d_23() {
  apic[24] {	pt3dadd(-117.98, 557.05, -12.55, 5.4)
	pt3dadd(-120.2, 559.63, -12.55, 5.4)
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  }
}
proc shape3d_24() {
  apic[29] {	pt3dadd(-273.84, 928.03, -18.2, 1.4)
	pt3dadd(-274.28, 928.62, -18.4, 0.89)
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  }
}
proc shape3d_25() {
  apic[33] {	pt3dadd(-153.49, 744.02, -16.45, 2.07)
	pt3dadd(-152.97, 744.54, -15.5, 2.07)
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  }
}
proc shape3d_26() {
  apic[34] {	pt3dadd(-209.54, 816.99, -46.5, 2.29)
	pt3dadd(-210.58, 818.25, -46.5, 2.29)
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  }
}
proc shape3d_27() {
  apic[37] {	pt3dadd(-64.04, 934.34, -36.05, 1.4)
	pt3dadd(-62.35, 934.48, -35.85, 1.4)
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  }
}
proc shape3d_28() {
  apic[41] {	pt3dadd(-22.74, 984.6, -51.55, 1.03)
	pt3dadd(-21.93, 985.63, -52.15, 1.03)
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  }
}
proc shape3d_29() {
  apic[43] {	pt3dadd(-152, 843.19, -47.8, 1.33)
	pt3dadd(-151.56, 845.26, -48.1, 1.33)
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  }
}
proc shape3d_30() {
  apic[44] {	pt3dadd(-72.64, 484.35, 0.8, 1.48)
	pt3dadd(-72.27, 485.9, 1.6, 1.48)
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  }
}
proc shape3d_31() {
  apic[47] {	pt3dadd(-27.8, 305.07, 1.6, 1.48)
	pt3dadd(-28.1, 307.21, 1.1, 1.33)
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  }
}
proc shape3d_32() {
  apic[52] {	pt3dadd(-120.2, 249.98, -43.65, 0.96)
	pt3dadd(-119.61, 250.79, -44.1, 0.96)
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  }
}
proc shape3d_33() {
  apic[54] {	pt3dadd(-89.56, 212.48, 10.3, 1.48)
	pt3dadd(-90.82, 213.22, 11.05, 1.48)
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  }
}
proc shape3d_34() {
  apic[62] {	pt3dadd(94.16, 139.91, 9.65, 1.03)
	pt3dadd(95.42, 140.8, 9.55, 1.03)
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  }
}
proc shape3d_35() {
  apic[68] {	pt3dadd(85.23, 51.17, 21.1, 1.03)
	pt3dadd(86.42, 50.21, 21.15, 1.03)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
}

proc subsets() { 
}
proc geom() {
}
proc geom_nseg() {
  soma area(.5) // make sure diam reflects 3d points
}
proc biophys() {
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil
	objref all,dends,segdends,Esyn,Esourse[2]
proc init(){
		objref all,dends,segdends,Esyn,Esourse[2]
		all=new SectionList()
		dends = new SectionList()
		segdends = new SectionList()
		Esyn=new List()
		Enetcon=new List()
		Esourse[0]=new Vector()
		Esourse[1]=new Vector()
		Isyn=new List()
		Inetcon=new List()
		topol()
basic_shape()
		access soma

		distance()

		forall{

			//dends.append()
			all.append()
			for i=0,n3d()-1{
				pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
			}
			if (diam<3){diam=1}
			nseg=9

			insert pas
			e_pas=-60
			g_pas=1/10000
			cm=1
			Ra=100

		}
		//soma dends.remove()		
		for i=0,69{
			access apic[i] 
			//if (distance(1)>700){ dends.append()}
		}
		for i=0,74{ dend[i] dends.append()}
		

		
		objref apcounter,apvec,nil
		numdend=0
		forsec dends{numdend=numdend+1 segdends.append()}
		apvec=new Vector()
		access soma
		apcounter=new NetCon(&v(.5), nil)
		apcounter.threshold = -20 
		apcounter.record(apvec)
		//saving voltage vectors
		objref Vvec[numdend+1],spikevec[numdend+1]
		i=0
		forsec dends {
			Vvec[i]=new Vector()
			Vvec[i].record(&v(0.9))
			spikevec[i]=new Vector()
			i=i+1
		}
		Vvec[numdend]=new Vector()
		//Vvec[numdend].record(&soma.v(0.5))
		Vvec[numdend].record(&apic[24].v(0.5))

}

endtemplate celltemplate