begintemplate l5
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend

proc celldef() {
  topol()
  geom()
  geom_nseg()
}

create soma[4], dend[32], apic[99]

proc topol() { local i
  connect soma[1](0), soma(1)
  connect soma[2](0), soma(0)
  connect soma[3](0), soma[2](1)
  connect dend(0), soma[1](1)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma[1](1)
  for i = 4, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  connect dend[10](0), soma[1](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect dend[15](0), soma(1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  connect dend[18](0), soma[2](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), soma(0)
  for i = 22, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  connect dend[26](0), dend[22](1)
  connect dend[27](0), dend[21](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect apic(0), soma[3](1)
  for i = 1, 17 connect apic[i](0), apic[i-1](1)
  connect apic[18](0), apic[16](1)
  connect apic[19](0), apic[15](1)
  for i = 20, 21 connect apic[i](0), apic[19](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  connect apic[24](0), apic[14](1)
  for i = 25, 26 connect apic[i](0), apic[24](1)
  connect apic[27](0), apic[13](1)
  connect apic[28](0), apic[12](1)
  for i = 29, 30 connect apic[i](0), apic[28](1)
  for i = 31, 32 connect apic[i](0), apic[30](1)
  for i = 33, 34 connect apic[i](0), apic[32](1)
  connect apic[35](0), apic[11](1)
  for i = 36, 37 connect apic[i](0), apic[35](1)
  connect apic[38](0), apic[10](1)
  for i = 39, 41 connect apic[i](0), apic[i-1](1)
  connect apic[42](0), apic[40](1)
  for i = 43, 44 connect apic[i](0), apic[42](1)
  connect apic[45](0), apic[39](1)
  for i = 46, 48 connect apic[i](0), apic[i-1](1)
  connect apic[49](0), apic[47](1)
  connect apic[50](0), apic[46](1)
  for i = 51, 52 connect apic[i](0), apic[50](1)
  connect apic[53](0), apic[45](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  connect apic[56](0), apic[38](1)
  for i = 57, 59 connect apic[i](0), apic[i-1](1)
  connect apic[60](0), apic[58](1)
  connect apic[61](0), apic[57](1)
  for i = 62, 63 connect apic[i](0), apic[61](1)
  for i = 64, 65 connect apic[i](0), apic[i-1](1)
  connect apic[66](0), apic[64](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  connect apic[69](0), apic[63](1)
  for i = 70, 71 connect apic[i](0), apic[69](1)
  connect apic[72](0), apic[56](1)
  connect apic[73](0), apic[9](1)
  connect apic[74](0), apic[8](1)
  connect apic[75](0), apic[7](1)
  for i = 76, 77 connect apic[i](0), apic[75](1)
  connect apic[78](0), apic[6](1)
  for i = 79, 80 connect apic[i](0), apic[78](1)
  connect apic[81](0), apic[5](1)
  for i = 82, 83 connect apic[i](0), apic[i-1](1)
  connect apic[84](0), apic[82](1)
  connect apic[85](0), apic[81](1)
  connect apic[86](0), apic[4](1)
  connect apic[87](0), apic[3](1)
  connect apic[88](0), apic[2](1)
  for i = 89, 90 connect apic[i](0), apic[88](1)
  connect apic[91](0), apic[1](1)
  connect apic[92](0), apic(1)
  for i = 93, 94 connect apic[i](0), apic[i-1](1)
  connect apic[95](0), apic[93](1)
  connect apic[96](0), apic[92](1)
  for i = 97, 98 connect apic[i](0), apic[96](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-11.2, 86.6, -0.7, 15.2)
	pt3dadd(-9.7, 80.9, -0.7, 14.18)
	pt3dadd(-9.7, 79.4, -0.7, 12)
  }
  soma[1] {pt3dclear()
	pt3dadd(-9.7, 79.4, -0.7, 12)
	pt3dadd(-9.7, 76.8, -0.7, 2.73)
	pt3dadd(-8.9, 75.7, 7, 8.11)
	pt3dadd(-8.1, 73.5, 7, 6.89)
  }
  dend {pt3dclear()
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  }
}
proc shape3d_2() {
  apic[14] {	pt3dadd(-132.2, 1004.3, 40.4, 1.052)
	pt3dadd(-133.3, 1006.9, 38.1, 1.052)
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  }
}
proc shape3d_3() {
  apic[46] {	pt3dadd(-63.6, 1019.3, 65.9, 1.184)
	pt3dadd(-69.5, 1021, 70.2, 1.184)
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  }
}
proc shape3d_4() {
  apic[86] {	pt3dadd(-123.8, 269.5, 47.9, 1.316)
	pt3dadd(-132.6, 267.3, 48.4, 0.658)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
}
proc geom() {
}
proc geom_nseg() {
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil


proc init(){
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn ,ccnetcon,tcnetcon,apcounter,apvec ,nil

	all=new SectionList()
	dends = new SectionList()
	tcdends = new SectionList()
	ccdends = new SectionList()
	ccsyn=new List()
	tcsyn=new List()
	ccnetcon=new List()
	tcnetcon=new List()
	celldef()
	access soma
	distance()
	forall{

		all.append()
		for i=0,n3d()-1{
			pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
		}
		dends.append()

		nseg=3
		insert pas
		e_pas=-60
		g_pas=1/30000//1/16000
		cm=1.5
		Ra=70
	}
	for i=0,31{
		access dend[i]
		tcdends.append()
		ccdends.append()
			}
	soma dends.remove()

	//forsec dends{diam=diam/1.2}
	objref apcounter,apvec,nil
	apvec=new Vector()
	access soma
	apcounter=new NetCon(&v(.5), nil)
	apcounter.threshold = -20 
	apcounter.record(apvec)
}

endtemplate l5

